PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[1,1,1]
  Experiment info = {u'participant': u''}
  Units = pix
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  expName = AffectiveSlider
  Screen = 1
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Routines
  Routine start
    CodeComponent code
      Begin Experiment:
        import random
        random.seed()
        x_top=0
        x_bottom=0
        mouse = event.Mouse(visible=True)
        thumb_top = 'AS_thumb.png'
        thumb_bottom = 'AS_thumb.png'
  Routine AffectiveSlider
    ImageComponent track_top
      pos = (0, 150)
      startVal [time (s)] = 0.0
      image = AS_track.png
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    ImageComponent track_bottom
      pos = (0, -50)
      startVal [time (s)] = 0.0
      image = AS_track.png
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    ImageComponent intensity_top
      pos = (0, 100)
      startVal [time (s)] = 0.0
      image = AS_intensity_cue.png
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    ImageComponent intensity_bottom
      pos = (0, -100)
      startVal [time (s)] = 0.0
      image = AS_intensity_cue.png
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    CodeComponent code_slider
      Begin Routine:
        if random.random() > .5:
            top_left = 'AS_unhappy.png'
            top_right = 'AS_happy.png'
            bottom_left = 'AS_sleepy.png'
            bottom_right = 'AS_wideawake.png'
            top = 'pleasure'
        else:
            bottom_left = 'AS_unhappy.png'
            bottom_right = 'AS_happy.png'
            top_left = 'AS_sleepy.png'
            top_right = 'AS_wideawake.png'
            top = 'arousal'
        x_top=0
        x_bottom=0
        top_scored = 0
        bottom_scored = 0
        done = 0
      End Routine:
        if top == 'pleasure':
            pleasure = round((x_top + 320)/640,3)
            arousal =  round((x_bottom + 320)/640,3)
        else:
            pleasure = round((x_bottom + 320)/640,3)
            arousal =  round((x_top + 320)/640,3)

        thisExp.addData('topcat', top)
        thisExp.addData('pleasure', pleasure)
        thisExp.addData('arousal', arousal)
        thisExp.addData('RT', reactiontime)
      Each Frame:
        [mousex,mousey] = mouse.getPos()
        [button0,button1,button2] = mouse.getPressed()

        if button0 == 1 and mousey > 130 and mousey < 170 and mousex >= -320 and mousex <= 320:
            x_top = mousex
            thumb_top = 'AS_thumb_black.png'
            thumb_bottom = 'AS_thumb.png'
            top_scored = 1
            if bottom_scored == 1:
                done = 1
        elif  button0 == 1 and mousey > -70 and mousey < -30 and mousex >= -320 and mousex <= 320:
            x_bottom = mousex
            thumb_top = 'AS_thumb.png'
            thumb_bottom = 'AS_thumb_black.png'
            bottom_scored = 1
            if top_scored == 1:
                done = 1
        elif done ==1 and button0 == 1 and mousey > -300 and mousey < -200 and mousex > -200 and mousex < 200:
            reactiontime = round(AffectiveSliderClock.getTime(),3)
            continueRoutine = False
        else:
            thumb_top = 'AS_thumb.png'
            thumb_bottom = 'AS_thumb.png'
    ImageComponent image_top_left
      pos = (-370, 125)
      startVal [time (s)] = 0.0
      image [set every repeat] = $top_left
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    ImageComponent image_top_right
      pos = (370, 125)
      startVal [time (s)] = 0.0
      image [set every repeat] = $top_right
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    ImageComponent image_bottom_left
      pos = (-370, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $bottom_left
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    ImageComponent image_bottom_right
      pos = (370, -75)
      startVal [time (s)] = 0.0
      image [set every repeat] = $bottom_right
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    ImageComponent slider_top
      pos [set every frame] = $[x_top, 150]
      startVal [time (s)] = 0.0
      image [set every frame] = $thumb_top
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    ImageComponent slider_bottom
      pos [set every frame] = $[x_bottom, -50]
      startVal [time (s)] = 0.0
      image [set every frame] = $thumb_bottom
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    ImageComponent image_submit
      opacity [set every frame] = $done
      pos = (0, -250)
      startVal [time (s)] = 0.0
      image = submit.png
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine AffectiveSlider
  LoopTerminator trials
